{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "channel": "avg", 
                "ocr_regions": {
                    "Detector": {
                        "prefix": "Detector", 
                        "type": "float", 
                        "xywh": "25;120;100;25"
                    }, 
                    "Integral": {
                        "suffix": "%", 
                        "type": "float", 
                        "xywh": "882;294;100;25"
                    }, 
                    "Label": {
                        "type": "string", 
                        "xywh": "64;416;200;25"
                    }
                }, 
                "slicenr": -1
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "OCR/Generic for Intevo_LEHR", 
        "usage": [
            "  \"OCR_xxx:prefix\": \"mm\" # text in bounding box of OCR_xxx starts with this and this should be stripped", 
            "  \"OCR_xxx:suffix\": \"mm\" # text in bounding box of OCR_xxx ends with this and this should be stripped", 
            "\n"
        ], 
        "version": "20180209"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "qc_series": {
            "params": {
                "channel": "which channel to take for multi-channel data; either an integer or 'avg', or 'rgb' (avg)", 
                "ocr_regions": {
                    "Detector": {
                        "prefix": "text in box starts with this and this should be stripped", 
                        "type": "result should be interpreted as variable of this type", 
                        "xywh": "x0;y0;width;height of bounding box"
                    }, 
                    "Integral": {
                        "suffix": "text in box ends with this and this should be stripped", 
                        "type": "result should be interpreted as variable of this type", 
                        "xywh": "x0;y0;width;height of bounding box"
                    }, 
                    "Label": {
                        "type": "result should be interpreted as variable of this type", 
                        "xywh": "x0;y0;width;height of bounding box"
                    }
                }, 
                "slicenr": "which slice to analyse if enhanced dicom is used (-1)"
            }
        }
    }
}