{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "OCR_MechIndex:prefix": "MI", 
                "OCR_MechIndex:type": "float", 
                "OCR_MechIndex:xywh": "913;22;80;25", 
                "OCR_TissueIndex:prefix": "TIS", 
                "OCR_TissueIndex:type": "float", 
                "OCR_TissueIndex:xywh": "822;22;90;25"
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "OCR/Generic for Philips Epiq", 
        "usage": [
            "  \"OCR_xxx:prefix\": \"mm\" # text in bounding box of OCR_xxx starts with this and this should be stripped", 
            "  \"OCR_xxx:suffix\": \"mm\" # text in bounding box of OCR_xxx ends with this and this should be stripped", 
            "\n"
        ], 
        "version": "20160901"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "qc_series": {
            "params": {
                "OCR_MechIndex:prefix": "text in bounding box of OCR_MechIndex starts with this", 
                "OCR_MechIndex:type": "contents minus prefix of bounding box of OCR_MechIndex should be of this type", 
                "OCR_MechIndex:xywh": "x0;y0;width;height of bounding box of OCR_MechIndex", 
                "OCR_TissueIndex:prefix": "text in bounding box of OCR_TissueIndex starts with this", 
                "OCR_TissueIndex:type": "contents minus prefix of bounding box of OCR_TissueIndex should be of this type", 
                "OCR_TissueIndex:xywh": "x0;y0;width;height of bounding box of OCR_TissueIndex"
            }
        }
    }
}